experiment_profile_name: stirring and temperature with aliases

metadata:
  author: Cameron Davidson-Pilon
  description: An experiment profile for hot and cold temps in two pioreactors. Stop after 10 hours. 


common:
  jobs:
    stirring:
      actions:
        - type: start
          hours_elapsed: 0.0
        - type: stop
          hours_elapsed: 10.0
    temperature_automation:
      actions:
        - type: stop
          hours_elapsed: 10.0

pioreactors:
  worker1:
    label: hot
    jobs:
      temperature_automation:
        actions:
          - type: start
            hours_elapsed: 0.0
            options:
              automation_name: thermostat
              target_temperature: 38
  worker2:
    label: cold
    jobs:
      temperature_automation:
        actions:
          - type: start
            hours_elapsed: 0.0
            options:
              automation_name: thermostat
              target_temperature: 28
