version: "1.0"

experiment_profile_name: conditional statements

metadata:
  author: Cam Davidson-Pilon
  description: A  profile to demonstrate conditional_statements as `if`

pioreactors:
  worker1:
    jobs: 
      stirring:
        actions:
          - type: start
            t: 0s
            options:
              target_rpm: 500
      od_reading:
        actions:
          - type: log
            if: false
            t: 3.6s
            options:
              message: "I'm not executed"
          - type: log
            if: ${{10 > 5}} # true, obviously
            t: 3.6s
            options:
              message: "I am executed"
          - type: start
            if: ${{ (worker1:stirring:target_rpm >= 400) and (worker1:stirring:target_rpm <= 650) }} # maybe true?
            t: 7.2s
