experiment_profile_name: repeated temperature cycle

metadata:
  author: Cameron
  description: This profile changes the temperature in a complex pattern over a 48-hour cycle.

common:
  jobs:
    temperature_automation:
      actions:
        - type: start
          t: 0.0
          options:
            automation_name: thermostat
            target_temperature: 28
        - type: repeat
          t: 6.0
          every: 48
          actions:
            - type: update
              t: 0.0
              options:
                target_temperature: 30
            - type: update
              t: 6.0
              options:
                target_temperature: 32
            - type: update
              t: 12.0
              options:
                target_temperature: 34
            - type: update
              t: 18.0
              options:
                target_temperature: 36
            - type: update
              t: 24.0
              options:
                target_temperature: 34
            - type: update
              t: 30.0
              options:
                target_temperature: 32
            - type: update
              t: 36.0
              options:
                target_temperature: 30
            - type: update
              t: 42.0
              options:
                target_temperature: 28