version: "1.0"

experiment_profile_name: dynamic led adjustment based on od

metadata:
  author: Your Name
  description: Dynamically updates LED intensity based on increases in OD reading.

common:
  jobs:
    od_reading:
      actions:
        - type: start
          t: 0s
    led_intensity:
      actions:
        - type: start
          t: 0s
          options:
            # Set initial LED intensity values; adjust these as needed
            B: 50
            C: 50
        - type: repeat
          t: 0.5 # Check every 0.5 hours, adjust the interval as needed
          every: 30m
          actions:
            - type: update
              t: 0s
              if: ${{::od_reading:od2.od > 1.0}} # Adjust this threshold as needed
              options:
                # Dynamically adjust the LED intensity based on OD reading; modify formula as needed
                B: ${{::leds:intensity.B + (::od_reading:od2.od - 1) * 10}}
                C: ${{::leds:intensity.C + (::od_reading:od2.od - 1) * 10}}
